PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = EmotionalStroopTask_SoloProject
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = 1.0000, -0.0039, -0.3725
      shape = star
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r', 'b', 'p', 'g', 'y'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine ins
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment
        Press SPACEBAR to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
  Routine thanks
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for participating!
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Desktop/conditionsfile.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'TORTURE', 'colour': 'red', 'stim_condition': 'C', 'corr_resp': 'r'},
      {'word': 'FAILURE', 'colour': 'blue', 'stim_condition': 'I', 'corr_resp': 'b'},
      {'word': 'DISGUST', 'colour': 'pink', 'stim_condition': 'I', 'corr_resp': 'p'},
      {'word': 'WATER', 'colour': 'yellow', 'stim_condition': 'I', 'corr_resp': 'y'},
      {'word': 'NATURE', 'colour': 'green', 'stim_condition': 'C', 'corr_resp': 'g'},
      {'word': 'MOUNTAIN', 'colour': 'green', 'stim_condition': 'I', 'corr_resp': 'g'},
      {'word': 'PEACE', 'colour': 'blue', 'stim_condition': 'C', 'corr_resp': 'b'},
      {'word': 'MOON', 'colour': 'red', 'stim_condition': 'I', 'corr_resp': 'r'},
      {'word': 'SUN', 'colour': 'yellow', 'stim_condition': 'C', 'corr_resp': 'y'},
      {'word': 'FOOTBALL', 'colour': 'pink', 'stim_condition': 'I', 'corr_resp': 'p'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
