PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Priming_tutorial5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_test
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar", "unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Desktop/study_wordfile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_test': 'book'},
      {'Study_test': 'cushion'},
      {'Study_test': 'phone '},
      {'Study_test': 'marble'},
      {'Study_test': 'board '},
      {'Study_test': 'laptop'},
      {'Study_test': 'chart'},
      {'Study_test': 't-shirt'},
      {'Study_test': 'mouse '},
      {'Study_test': 'pastry '},
      {'Study_test': 'case'},
      {'Study_test': 'cruise '},
      {'Study_test': 'police '},
      {'Study_test': 'keys'},
      {'Study_test': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Desktop/test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p'},
      {'test_word': '_ha_t'},
      {'test_word': 'T_hi_t'},
      {'test_word': '_ou_se'},
      {'test_word': 'P_as_tr_'},
      {'test_word': 'c_s_'},
      {'test_word': '_ru_is_'},
      {'test_word': 'P_li_e'},
      {'test_word': 'K_y_'},
      {'test_word': 'P_st_r'},
      {'test_word': '_o_rd'},
      {'test_word': '_a_bl_'},
      {'test_word': '_ho_e'},
      {'test_word': '_oo_'},
      {'test_word': 'c_s_io_'},
      {'test_word': 'ta_l_'},
      {'test_word': 'p_nc_l'},
      {'test_word': 'v_s_'},
      {'test_word': 'bo_t_e'},
      {'test_word': 'c_m_ra'}]
    Routine test
  LoopTerminator trials_2
